PsychoPy2experiment version="2022.1.1"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['sbj'], expName, expInfo['date'])
  Experiment info = {'sbj': '810199275', 'hndns': '', 'eye': '', 'sex': '', 'age': '', 'edu': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0,0,0]
  colorSpace = hsv
  expName = HW1
  keyboardBackend = ioHub
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Routines
  Routine trial
    TextComponent text
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
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      text:
        سلام.
        با تشکر از حضور شما در این مطالعه شناختی.
  Routine ins_kbRight
    ImageComponent kbRight
      image = kbRight.jpg
      size = (1.75, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fixing_point
    PolygonComponent fix
      fillColor = 1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine test_kbRight
    ImageComponent image
      image [set every repeat] = $stim
      pos [set every repeat] = pos
      size [set every repeat] = size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      units = cm
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    KeyboardComponent key_resp_2
      allowedKeys = 'o','p'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine rest
    ImageComponent rest_image
      image = rest.jpg
      size = (1.75, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine ins_kbLeft
    ImageComponent kbLeft
      image = kbLeft.jpg
      size = (1.75, 1)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine test_kbLeft
    ImageComponent image_2
      image [set every repeat] = $stim
      pos [set every repeat] = pos
      size [set every repeat] = size
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
      units = cm
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    KeyboardComponent key_resp_5
      allowedKeys = 'q','w'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_2
      languageStyle = Arabic
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = پایان. تشکر از حضور شما.
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Flow
  Routine trial
  Routine ins_kbRight
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = kbRight.xlsx
    loopType = random
    nReps = 2
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    Routine fixing_point
    Routine test_kbRight
  LoopTerminator trials
  Routine rest
  Routine ins_kbLeft
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = kbRight.xlsx
    loopType = random
    nReps = 2
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    Routine fixing_point
    Routine test_kbLeft
  LoopTerminator trials_2
  Routine rest
  Routine ins_kbRight
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = kbRight.xlsx
    loopType = random
    nReps = 2
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    Routine fixing_point
    Routine test_kbRight
  LoopTerminator trials_3
  Routine rest
  Routine ins_kbRight
  LoopInitiator trials_4 loopType="TrialHandler"
    conditionsFile = kbRight.xlsx
    loopType = random
    nReps = 2
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    Routine fixing_point
    Routine test_kbRight
  LoopTerminator trials_4
  Routine rest
  Routine ins_kbLeft
  LoopInitiator trials_5 loopType="TrialHandler"
    conditionsFile = kbRight.xlsx
    loopType = random
    nReps = 2
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    Routine fixing_point
    Routine test_kbLeft
  LoopTerminator trials_5
  Routine rest
  Routine ins_kbRight
  LoopInitiator trials_6 loopType="TrialHandler"
    conditionsFile = kbRight.xlsx
    loopType = random
    nReps = 2
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    Routine fixing_point
    Routine test_kbRight
  LoopTerminator trials_6
  Routine rest
  Routine ins_kbLeft
  LoopInitiator trials_7 loopType="TrialHandler"
    conditionsFile = kbRight.xlsx
    loopType = random
    nReps = 2
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    Routine fixing_point
    Routine test_kbLeft
  LoopTerminator trials_7
  Routine rest
  Routine ins_kbLeft
  LoopInitiator trials_8 loopType="TrialHandler"
    conditionsFile = kbRight.xlsx
    loopType = random
    nReps = 2
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    Routine fixing_point
    Routine test_kbLeft
  LoopTerminator trials_8
  Routine end
